<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:midiseq="clr-namespace:Bonsai.MidiSequencing;assembly=Bonsai.MidiSequencing"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:Sum" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Val0</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GreaterThan">
          <Operand xsi:type="DoubleProperty">
            <Value>5000</Value>
          </Operand>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:DistinctUntilChanged" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="midiseq:CreateNoteEvent">
            <midiseq:EventType>NoteOn</midiseq:EventType>
            <midiseq:Channel>0</midiseq:Channel>
            <midiseq:NoteNumber>60</midiseq:NoteNumber>
            <midiseq:Velocity>100</midiseq:Velocity>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="midiseq:SoftwareSynth">
            <midiseq:Waveform>Triangle</midiseq:Waveform>
            <midiseq:Gain>0.25</midiseq:Gain>
            <midiseq:Attack>0.002</midiseq:Attack>
            <midiseq:Release>0.2</midiseq:Release>
            <midiseq:BufferLength>480</midiseq:BufferLength>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>145</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>BinaryInv</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:RoiActivity">
          <cv:Regions>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>488</cv:X>
                <cv:Y>118</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>488</cv:X>
                <cv:Y>15</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>639</cv:X>
                <cv:Y>15</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>639</cv:X>
                <cv:Y>221</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>488</cv:X>
                <cv:Y>221</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>120</cv:X>
                <cv:Y>14</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>4</cv:X>
                <cv:Y>14</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>4</cv:X>
                <cv:Y>157</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>120</cv:X>
                <cv:Y>157</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
          </cv:Regions>
          <cv:Operation>Sum</cv:Operation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Activity.Val0</Selector>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>10000</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>On</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="midiseq:CreateNoteEvent">
          <midiseq:EventType>NoteOn</midiseq:EventType>
          <midiseq:Channel>0</midiseq:Channel>
          <midiseq:NoteNumber>60</midiseq:NoteNumber>
          <midiseq:Velocity>100</midiseq:Velocity>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Off</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="midiseq:CreateNoteEvent">
          <midiseq:EventType>NoteOff</midiseq:EventType>
          <midiseq:Channel>0</midiseq:Channel>
          <midiseq:NoteNumber>60</midiseq:NoteNumber>
          <midiseq:Velocity>100</midiseq:Velocity>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Activity.Val0</Selector>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>500000</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>On</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="midiseq:CreateNoteEvent">
          <midiseq:EventType>NoteOn</midiseq:EventType>
          <midiseq:Channel>0</midiseq:Channel>
          <midiseq:NoteNumber>67</midiseq:NoteNumber>
          <midiseq:Velocity>100</midiseq:Velocity>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Off</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="midiseq:CreateNoteEvent">
          <midiseq:EventType>NoteOff</midiseq:EventType>
          <midiseq:Channel>0</midiseq:Channel>
          <midiseq:NoteNumber>67</midiseq:NoteNumber>
          <midiseq:Velocity>100</midiseq:Velocity>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="midiseq:SoftwareSynth">
          <midiseq:Waveform>Triangle</midiseq:Waveform>
          <midiseq:Gain>0.25</midiseq:Gain>
          <midiseq:Attack>0.002</midiseq:Attack>
          <midiseq:Release>0.2</midiseq:Release>
          <midiseq:BufferLength>480</midiseq:BufferLength>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="9" To="20" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="13" To="16" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="19" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
      <Edge From="19" To="30" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="23" To="26" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="29" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source2" />
      <Edge From="29" To="30" Label="Source2" />
      <Edge From="30" To="31" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>